graphs:
  - nodes:
      - id: camera
        module: nodes.vision.camera
        class: UnifiedFacialMetricsAndTracking
      - id: publish_facial_expressions
        module: timeflux.nodes.zmq
        class: Pub
        params:
          topic: facial_metrics
      - id: blendshapes
        module: nodes.vision.camera
        class: FaceBlendshapes
      - id: publish_blendshapes
        module: timeflux.nodes.zmq
        class: Pub
        params:
          topic: facial_blendshapes
      - id: emotions
        module: nodes.vision.camera
        class: EmotionNode
      - id: publish_emotions
        module: timeflux.nodes.zmq
        class: Pub
        params:
          topic: facial_emotions
    edges:
      - source: camera
        target: publish_facial_expressions
      - source: blendshapes
        target: publish_blendshapes
      - source: emotions
        target: publish_emotions
    rate: 10
